PsychoPy2experiment version="1.84.1"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[1.000,1.000,1.000]
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = Episodic_Task
  Units = use prefs
  Screen = 1
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Routines
  Routine dummy
    TextComponent dummy_text
      color = black
      text = +
      stopVal [duration (s)] = 6.0
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine ThankYou
    TextComponent thankyou_text
      color = black
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        End of experiment.

        Thank you.
  Routine Fixation
    CodeComponent fixation_code
      Begin Experiment:
        fixList = [1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5]
      Begin Routine:
        random.shuffle(fixList)
        fixDuration = fixList[0]
    TextComponent fixation_text
      color = black
      text = +
      stopVal [duration (s)] = $fixDuration
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    CodeComponent fixation_code2
      End Routine:
        thisExp.addData("Fixation duration", fixList[0])
        del fixList[0]
  Routine Episodic_Trial
    CodeComponent timer_code
      Begin Experiment:
        timerStarted = False
      Begin Routine:
        if not timerStarted:
            startTime = globalClock.getTime()
            timerStarted = True

        # now save a start time for every trial (hence, not indented):
        thisExp.addData("Trial_start", globalClock.getTime() - startTime)
    CodeComponent xposition_code
      Begin Experiment:
        import random
        xpositions = [-0.5,0,0.5]
      Begin Routine:
        random.shuffle(xpositions)
        # now save the positions:
        thisExp.addData("Position1", xpositions[0])
        thisExp.addData("Position2", xpositions[1])
        thisExp.addData("Position3", xpositions[2])
    CodeComponent target_code
      Begin Experiment:
        posResponse = 0
      Begin Routine:
        if xpositions[0] == -0.5:
         posResponse = 1
        elif xpositions[0] == 0:
         posResponse = 2
        elif xpositions[0] == 0.5:
         posResponse = 3
    TextComponent prime_text
      color = black
      text [set every repeat] = $prime
      stopVal [duration (s)] = 4.0
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent target_text
      color = black
      text [set every repeat] = $target
      stopVal [duration (s)] = 4.0
      pos [set every repeat] = [xpositions[0], -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent dist1_text
      color = black
      text [set every repeat] = $dist1
      stopVal [duration (s)] = 4.0
      pos [set every repeat] = [xpositions[1], -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent dist2_text
      color = black
      text [set every repeat] = $dist2
      stopVal [duration (s)] = 4.0
      pos [set every repeat] = [xpositions[2], -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    KeyboardComponent key_response
      correctAns = $posResponse
      storeCorrect = True
      stopVal [duration (s)] = 4.0
      forceEndRoutine = False
      allowedKeys = '1','2','3'
      startVal [time (s)] = 0.0
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  Routine WaitForTrigger
    CodeComponent waitfortrigger_code
      Begin Experiment:
        from psychopy.hardware.emulator import launchScan
        #
        # settings for launchScan:
        MR_settings = {
            'TR': 2.000, # duration (sec) per volume
            'volumes': 400, # number of whole-brain 3D volumes / frames
            'sync': '5', # character to use as the sync timing event; assumed to come at start of a volume
            'skip': 3, # number of volumes lacking a sync pulse at start of scan (for T1 stabilization)
            }
      Begin Routine:
        vol = launchScan(win, MR_settings, globalClock=globalClock,mode='Scan')
  Routine Instructions
    TextComponent instructions_text
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        In this experiment you will be presented with a single word on top of the screen.

        Using the button box, your goal is to select 1 of the 3 options that is paired with that word, based on your training yesterday. For example if the association you learned was BEE and FLUTE, the correct answer in the following example would be FLUTE:

                                 BEE

                FLUTE       ATOM       PLATE

        Once you make a selection please wait for the next trial to appear.

        Good luck.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  Routine WaitForTrigger
  Routine dummy
  LoopInitiator episodic_trials_loop loopType="TrialHandler"
    conditionsFile = conds/Episodic_ListA.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_number': 1, 'prime': u'apple', 'target': u'flute', 'dist1': u'towel', 'episodic_category': 1.0, 'dist2': u'bear', 'list_AB': u'A'},
      {'trial_number': 2, 'prime': u'ball', 'target': u'vanilla', 'dist1': u'scissors', 'episodic_category': 1.0, 'dist2': u'theme', 'list_AB': u'A'},
      {'trial_number': 3, 'prime': u'bean', 'target': u'velvet', 'dist1': u'ambulance', 'episodic_category': 1.0, 'dist2': u'champagne', 'list_AB': u'A'},
      {'trial_number': 4, 'prime': u'bee ', 'target': u'curtain', 'dist1': u'gloves', 'episodic_category': 1.0, 'dist2': u'leaf', 'list_AB': u'A'},
      {'trial_number': 5, 'prime': u'blouse', 'target': u'problem', 'dist1': u'eyes', 'episodic_category': 1.0, 'dist2': u'turtle', 'list_AB': u'A'},
      {'trial_number': 6, 'prime': u'bomb', 'target': u'bucket', 'dist1': u'frog', 'episodic_category': 1.0, 'dist2': u'robe', 'list_AB': u'A'},
      {'trial_number': 7, 'prime': u'castle', 'target': u'valve', 'dist1': u'judge', 'episodic_category': 1.0, 'dist2': u'cuff', 'list_AB': u'A'},
      {'trial_number': 8, 'prime': u'chair', 'target': u'tweezers', 'dist1': u'strawberry', 'episodic_category': 1.0, 'dist2': u'mushroom', 'list_AB': u'A'},
      {'trial_number': 9, 'prime': u'chocolate', 'target': u'siren', 'dist1': u'graveyard', 'episodic_category': 1.0, 'dist2': u'starch', 'list_AB': u'A'},
      {'trial_number': 10, 'prime': u'doll', 'target': u'teapot', 'dist1': u'mailbox', 'episodic_category': 1.0, 'dist2': u'sentence', 'list_AB': u'A'}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
    Routine Episodic_Trial
    Routine Fixation
  LoopTerminator episodic_trials_loop
  Routine ThankYou
