PsychoPy2experiment version="1.84.1"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[1.000,1.000,1.000]
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = Semantic_Task
  Units = use prefs
  Screen = 1
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Routines
  Routine Fixation
    CodeComponent fixation_code
      Begin Experiment:
        fixList = [1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,1.5,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.0,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,2.5,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.0,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5,3.5]
      Begin Routine:
        random.shuffle(fixList)
        fixDuration = fixList[0]
    TextComponent fixation_text
      color = black
      text = +
      stopVal [duration (s)] = $fixDuration
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    CodeComponent fixation_code2
      End Routine:
        thisExp.addData("Fixation duration", fixList[0])
        del fixList[0]
  Routine ThankYou
    TextComponent thankyou_text
      color = black
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        End of experiment.

        Thank you.
  Routine Semantic_trial
    CodeComponent timer_code
      Begin Experiment:
        timerStarted = False
      Begin Routine:
        if not timerStarted:
            startTime = globalClock.getTime()
            timerStarted = True

        # now save a start time for every trial (hence, not indented):
        thisExp.addData("Trial_start", globalClock.getTime() - startTime)
    CodeComponent xposition_code
      Begin Experiment:
        import random
        xpositions = [-0.5,0,0.5]
      Begin Routine:
        random.shuffle(xpositions)
        # now save the positions:
        thisExp.addData("Position1", xpositions[0])
        thisExp.addData("Position2", xpositions[1])
        thisExp.addData("Position3", xpositions[2])
    CodeComponent target_code
      Begin Experiment:
        posResponse = 0
      Begin Routine:
        if xpositions[0] == -0.5:
         posResponse = 1
        elif xpositions[0] == 0:
         posResponse = 2
        elif xpositions[0] == 0.5:
         posResponse = 3
    TextComponent prime_text
      color = black
      text [set every repeat] = $prime
      stopVal [duration (s)] = 4.0
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent target_text
      color = black
      text [set every repeat] = $target
      stopVal [duration (s)] = 4.0
      pos [set every repeat] = [xpositions[0], -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent dist1_text
      color = black
      text [set every repeat] = $dist1
      stopVal [duration (s)] = 4.0
      pos [set every repeat] = [xpositions[1], -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent dist2_text
      color = black
      text [set every repeat] = $dist2
      stopVal [duration (s)] = 4.0
      pos [set every repeat] = [xpositions[2], -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    KeyboardComponent key_response
      correctAns = $posResponse
      storeCorrect = True
      stopVal [duration (s)] = 4.0
      forceEndRoutine = False
      allowedKeys = '1','2','3'
      startVal [time (s)] = 0.0
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  Routine WaitForTrigger
    CodeComponent waitfortrigger_code
      Begin Experiment:
        from psychopy.hardware.emulator import launchScan
        #
        # settings for launchScan:
        MR_settings = {
            'TR': 2.000, # duration (sec) per volume
            'volumes': 400, # number of whole-brain 3D volumes / frames
            'sync': '5', # character to use as the sync timing event; assumed to come at start of a volume
            'skip': 3, # number of volumes lacking a sync pulse at start of scan (for T1 stabilization)
            }
      Begin Routine:
        vol = launchScan(win, MR_settings, globalClock=globalClock,mode='Scan')
  Routine dummys
    TextComponent dummy_text
      color = black
      text = +
      stopVal [duration (s)] = 6.0
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine Instructions
    TextComponent instructions_text
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        In this experiment you will be presented with a single word on top of the screen, and 3 options at the bottom.

        Using the button box, your goal is to select 1 of the 3 options that is most associated with the given word. For example:

                                  BEE

                STING       PAN       ATOM

        The correct answer in this example is STING.

        Once you make a selection please wait for the next trial to appear.

        Good luck.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  Routine WaitForTrigger
  Routine dummys
  LoopInitiator semantic_trials_loop loopType="TrialHandler"
    conditionsFile = conds/Semantic_ListB.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_number': 1, 'prime': u'arm', 'target': u'bracelet', 'semstr_category': 1, 'dist2': u'cane', 'dist1': u'cradle', 'semstr': 0.040000000000000001, 'list_AB': u'B'},
      {'trial_number': 2, 'prime': u'ballet', 'target': u'jazz', 'semstr_category': 1, 'dist2': u'latch', 'dist1': u'sting', 'semstr': 0.01, 'list_AB': u'B'},
      {'trial_number': 3, 'prime': u'bed', 'target': u'dresser', 'semstr_category': 1, 'dist2': u'mop', 'dist1': u'shingle', 'semstr': 0.01, 'list_AB': u'B'},
      {'trial_number': 4, 'prime': u'beer', 'target': u'jug', 'semstr_category': 1, 'dist2': u'leg', 'dist1': u'rat', 'semstr': 0.040000000000000001, 'list_AB': u'B'},
      {'trial_number': 5, 'prime': u'boat', 'target': u'compass', 'semstr_category': 1, 'dist2': u'mower', 'dist1': u'sprain', 'semstr': 0.01, 'list_AB': u'B'},
      {'trial_number': 6, 'prime': u'bone', 'target': u'fossil', 'semstr_category': 1, 'dist2': u'kettle', 'dist1': u'suede', 'semstr': 0.14999999999999999, 'list_AB': u'B'},
      {'trial_number': 7, 'prime': u'cat', 'target': u'paw', 'semstr_category': 1, 'dist2': u'keyboard', 'dist1': u'cork', 'semstr': 0.02, 'list_AB': u'B'},
      {'trial_number': 8, 'prime': u'chalk', 'target': u'crayon', 'semstr_category': 1, 'dist2': u'luggage', 'dist1': u'mustard', 'semstr': 0.070000000000000007, 'list_AB': u'B'},
      {'trial_number': 9, 'prime': u'church', 'target': u'organ', 'semstr_category': 1, 'dist2': u'square', 'dist1': u'yolk', 'semstr': 0.029999999999999999, 'list_AB': u'B'}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
    Routine Semantic_trial
    Routine Fixation
  LoopTerminator semantic_trials_loop
  Routine ThankYou
